CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does containregexp "RAW") (file does contain "SVCC")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Sample>[a-z,A-Z,0-9]{0,20})_Image(?P<ImageNumber>[0-9]{3})_Lng_SVCC_(?P<Processed>[a-z,A-z]{1,30})_ch(?P<Channel>[0-9]{2}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "02")
    Name to assign these images:phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Sample

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:60
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:phalloidin
    Name the output image:IllumPhalloidin
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:500
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Select the input image:phalloidin
    Name the output image:CorrPhalloidin
    Select the illumination function:IllumPhalloidin
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cytoskeleton
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrPhalloidin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Cytoskeleton
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:CorrPhalloidin
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MaskObjects:[module_num:11|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
    Select objects to be masked:Cytoskeleton
    Name the masked objects:MaskedCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoskeleton
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:12|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enabled:False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
    Select the input objects:MaskedCells
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
EditObjectsManually:[module_num:13|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enabled:False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
    Select the objects to be edited:Cytoskeleton
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:CorrPhalloidin
    Allow overlapping objects?:Yes

MeasureImageAreaOccupied:[module_num:14|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cytoskeleton
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
MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:Cytoskeleton
    Calculate the Zernike features?:Yes

CalculateMath:[module_num:16|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
    Name the output measurement:AreaPerCell
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_Cytoskeleton
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Number_Object_Number
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RescaleIntensity:[module_num:17|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
    Select the input image:CorrPhalloidin
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrPhalloidin
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF80
    Select objects to display:Nuclei
    Select outline color:blue
    Select objects to display:Cytoskeleton

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:Single name
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    Enter single file name:Overlay_nuclei_actin_\g<Sample>_t1_\g<ImageNumber>_\g<Processed>
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\CellProfiler\\Pipeline Output\\RK_Att10\\40x
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\CellProfiler\\Pipeline Output\\RK_Att10\\40x
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoskeleton|Number_Object_Number,Cytoskeleton|Location_Center_Y,Cytoskeleton|Location_Center_X,Cytoskeleton|Location_Center_Z,Cytoskeleton|Parent_Nuclei,Cytoskeleton|AreaShape_Perimeter,Cytoskeleton|AreaShape_FormFactor,Cytoskeleton|AreaShape_Solidity,Cytoskeleton|AreaShape_Orientation,Cytoskeleton|AreaShape_Center_Y,Cytoskeleton|AreaShape_Center_X,Cytoskeleton|AreaShape_Center_Z,Cytoskeleton|AreaShape_MinFeretDiameter,Cytoskeleton|AreaShape_MaxFeretDiameter,Cytoskeleton|AreaShape_Zernike_1_1,Cytoskeleton|AreaShape_Zernike_0_0,Cytoskeleton|AreaShape_Zernike_3_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:RK_Att10_t1_
    Overwrite existing files without warning?:No
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